{% set freqs = [12,10,13,8] %}
graphs:
  - id: monitor
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics:
          - raw_eeg
          - events

    # Powerline notch filter
    #- id: notch
    #  module: timeflux_dsp.nodes.filters
    #  class: IIRLineFilter
    #  params:
    #    edges_center: [50]
    #    orders: [2]
    #    edges_width: [3]
    # Band pass filter the signal
    - id: notch
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        order: 4
        frequencies: [49, 51]
        filter_type: 'bandstop'

    # Band pass filter the signal
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        order: 4
        frequencies: [1, 30]
        filter_type: 'bandpass'

    # Continuously buffer the signal
    - id: rolling_window
      module: timeflux.nodes.window
      class: Window
      params:
        length: 2

    # Compute the power spectral density
    - id: psd
      module: timeflux_dsp.nodes.spectral
      class: Welch

    - id: freq_bands
      module: timeflux_dsp.nodes.spectral
      class: Bands
      params:
        relative: true
        bands:
        {% for freq in  freqs %}
          {{ freq}}Hz: [{{ freq - 0.5 }}, {{ freq + 0.5 }}]
        {% endfor %}

    {% for freq in freqs %}

    - id: avg_channel_{{freq}}Hz
      module: timeflux.nodes.apply
      class: ApplyMethod
      params:
        method: numpy.mean
        axis: 1
        apply_mode: reduce

    - id: rename_{{freq}}Hz
      module: timeflux.nodes.axis
      class: RenameColumns
      params:
        names: ['{{ freq}}Hz']

    {% endfor %}


    - id: freqs_concat
      module: timeflux_dsp.nodes.helpers
      class: Concat


    # UI
    - id: ui
      module: timeflux_ui.nodes.ui
      class: UI
      params:
        port: 8001
          #settings:
          #  monitor:
          #    minValue: -200
          #    maxValue: 200

    edges:
      - source: sub:raw_eeg
        target: ui:raw_eeg
      - source: sub:events
        target: ui:events

      - source: sub:raw_eeg
        target: notch
      - source: notch
        target: bandpass
      - source: bandpass
        target: ui:processed_eeg



      - source: bandpass
        target: rolling_window
      - source: rolling_window
        target: psd
      - source: psd
        target: freq_bands

    {% for freq in freqs %}
      - source: freq_bands:{{ freq }}Hz
        target: avg_channel_{{ freq }}Hz
      - source: avg_channel_{{ freq }}Hz
        target: rename_{{ freq }}Hz
      - source: rename_{{ freq }}Hz
        target: freqs_concat:{{ freq }}Hz
    {% endfor %}


      - source: freqs_concat
        target: ui:freqs_psd
